<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PelletCommand" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Patch1Events</Name>
      </Expression>
      <Expression xsi:type="p1:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="p1:OutputSet" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessageType">
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType>Write</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.GetTimestamp() as Timestamp,
False as Value)</scr:Expression>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PelletDelivered" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Patch1PelletDelivered</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Seconds as Timestamp,
True as Value)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:RepeatEverySubject.bonsai" />
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>